#pragma once
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLFilLib.hsl"
#include "HSLTimLib.hsl"
#include "WSI\\AswStatusDialog_WSI\\AswStatusDialog_WSI.hsl"
#include "WSI\\HSLGetSerialNumber_WSI\\HSLGetSerialNumber_WSI.hsl"
#include "HSLMthLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "lookup.hs_"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "MLSTARLiquidClassLib.hsl"
#include "HSLFileDirectoryLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "WSI\\FindDBPath\\FindDBPath.hs_"
#include "Load Instructions (All)\\load_instructions\\load_instructions.hs_"
#include "HSLML_STARLib.hsl"
#include "WSI\\JSONSearch\\HSLJson.hsl"
#include "Hamilton DriverTools\\Hamilton DriverTools.hsl"
#include "HSLUtilLib2.hsl"
#include "Labware_Property_Query\\Labware_Property_Query.hs_"
#include "UV_Decontamination\\UvDecontaminationSub.hs_"
#include "HSLExtensions\\Array3D.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLExtensions\\Venus.hsl"
#include "HSLExtensions\\Drive.hsl"
#include "WSI\\JSONSearch\\JSONSearch.hs_"
#include "VirtualLabware_V2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace SANGERGENERAL {
  variable _blnTempUser;
  function AlignLabware( device & ML_STAR, sequence & _seq ) void ;
  function CreateChannelPattern( variable _intChannelNumber, variable _intCurrentLoop, variable _intMaxLoop, variable _intModulus ) variable ;
  function DeleteSchema( variable _strFolderPath ) void ;
  function DoorLock( device & ML_STAR, variable _blnSim, variable _blnLock ) void ;
  function GetAvailableSeqPositions( sequence & _seq ) variable ;
  function GetBarcode( device & ML_STAR, sequence _seq ) variable ;
  function GetNumberOfChannels( device & ML_STAR, variable _intChannelType ) variable ;
  function ReloadTips( device & ML_STAR, variable _strTipCounter, variable _blnUserPrompt ) void ;
  function StackedLabwarePos( variable _blnEffect, sequence & _seq ) void ;
  function StatusDisplay_Init( variable _blnTraceMethodName ) void ;
  function StatusDisplay_Update( variable _strMessage1, variable _strMessage2, variable _blnTrace ) variable ;
  function TipCheck( sequence & _seqTips, variable _strTipCounter, variable _intTipsNeeded ) variable ;
  function TipPickup( device & ML_STAR, variable _strChannelPattern, sequence & _seqTip, variable _strTipCounter, variable _blnTesting ) void ;
  function UpdateUsers_DateLastUsed( variable _strCurrentUserPrefix ) void ;
  function VolumePlausibilityCheck( variable _intVolumeToTransfer, variable _strLC ) void ;
  function WorklistEntryValidation( variable varEntry, variable blnRemoveSpaces ) variable ;
  private function _FourWellHandling( sequence & _seq, variable _strCP, variable _intWellCount ) variable ;
  private function _GetDaysSinceClean( variable _blnAdmin ) variable ;
  private function _SetCleanDate( variable _strCardID ) void ;
  private function z_AdminDetect( variable _strUser, variable & _blnAdmin ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOOKUP::_InitLibrary();
    FINDDBPATH::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    LPQ::_InitLibrary();
    UVDECONTAMINATIONSUB::_InitLibrary();
    JSONSEARCH::_InitLibrary();
  }
  function _ExitLibrary() {
    LOOKUP::_ExitLibrary();
    FINDDBPATH::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    LPQ::_ExitLibrary();
    UVDECONTAMINATIONSUB::_ExitLibrary();
    JSONSEARCH::_ExitLibrary();
  }

  private function z_AdminDetect( variable _strUser, variable & _blnAdmin ) variable {
    private variable _arrValidCharacters[];
    private variable _arrUserIDCharacters[];
    private variable _intNumberOfUserIDCharacters;
    private variable loopCounter1;
    private variable _intLookupReturn;
    _blnAdmin = 0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- Submitted UserID = "), _strUser);
    _arrValidCharacters.SetSize(0);
    _arrUserIDCharacters.SetSize(0);
    _arrUserIDCharacters = HSLExtensions::String::ConvertToCharArray(_strUser);
    _arrValidCharacters.AddAsLast(Translate("a"));
    _arrValidCharacters.AddAsLast(Translate("b"));
    _arrValidCharacters.AddAsLast(Translate("c"));
    _arrValidCharacters.AddAsLast(Translate("d"));
    _arrValidCharacters.AddAsLast(Translate("e"));
    _arrValidCharacters.AddAsLast(Translate("f"));
    _arrValidCharacters.AddAsLast(Translate("g"));
    _arrValidCharacters.AddAsLast(Translate("h"));
    _arrValidCharacters.AddAsLast(Translate("i"));
    _arrValidCharacters.AddAsLast(Translate("j"));
    _arrValidCharacters.AddAsLast(Translate("k"));
    _arrValidCharacters.AddAsLast(Translate("l"));
    _arrValidCharacters.AddAsLast(Translate("m"));
    _arrValidCharacters.AddAsLast(Translate("n"));
    _arrValidCharacters.AddAsLast(Translate("o"));
    _arrValidCharacters.AddAsLast(Translate("p"));
    _arrValidCharacters.AddAsLast(Translate("q"));
    _arrValidCharacters.AddAsLast(Translate("r"));
    _arrValidCharacters.AddAsLast(Translate("s"));
    _arrValidCharacters.AddAsLast(Translate("t"));
    _arrValidCharacters.AddAsLast(Translate("u"));
    _arrValidCharacters.AddAsLast(Translate("v"));
    _arrValidCharacters.AddAsLast(Translate("w"));
    _arrValidCharacters.AddAsLast(Translate("x"));
    _arrValidCharacters.AddAsLast(Translate("y"));
    _arrValidCharacters.AddAsLast(Translate("z"));
    _arrValidCharacters.AddAsLast(Translate("0"));
    _arrValidCharacters.AddAsLast(Translate("1"));
    _arrValidCharacters.AddAsLast(Translate("2"));
    _arrValidCharacters.AddAsLast(Translate("3"));
    _arrValidCharacters.AddAsLast(Translate("4"));
    _arrValidCharacters.AddAsLast(Translate("5"));
    _arrValidCharacters.AddAsLast(Translate("6"));
    _arrValidCharacters.AddAsLast(Translate("7"));
    _arrValidCharacters.AddAsLast(Translate("8"));
    _arrValidCharacters.AddAsLast(Translate("9"));
    _arrValidCharacters.AddAsLast(Translate("0"));
    _intNumberOfUserIDCharacters=_arrUserIDCharacters.GetSize();
    if (_intNumberOfUserIDCharacters >= 1)
    {
      {
        for(loopCounter1 = 0; loopCounter1 < _intNumberOfUserIDCharacters;)
        {
          loopCounter1 = loopCounter1 + 1;
          _intLookupReturn = LOOKUP::Lookup(_arrValidCharacters, _arrUserIDCharacters.ElementAt( loopCounter1 -1));
          if (_intLookupReturn == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- User ID is invalid"), Translate(""));
            return (0);
          }
        }
      }
    }
    else
    {
      return (0);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("---------- User ID is valid"), Translate(""));
    return (1);
  }

  private function _GetDaysSinceClean( variable _blnAdmin ) variable {
    private variable _rtnSkipClean;
    private variable _strSQLStatement;
    private variable _hndAccessDB_User;
    private file _hndAccessDB;
    private variable _strCurrentTime;
    private variable _strDate;
    private variable _strCurrentDate;
    private variable _strCellCalcFilePath;
    private variable _strMethodsFolderPath;
    private variable _strBatFilePath;
    private variable _strCellCalc2FilePath;
    private file _hndCellCalc2;
    private file _hndCellCalc;
    private variable _fltDaysSinceLastClean;
    private variable _strAccessDBFilePath;
    private variable _strConfigFolderPath;
    private dialog dialogHandle_1;
    private variable _loopCounter1;
    private variable _rtnValue;
    private variable _intTimeWaiting;
    private timer _tmr;
    private variable _strMethodPath;
    private variable _intBackslashPosition;
    private variable _strMethodName;
    private variable _strPyFilePath;
    private variable _arrConfigFiles[];
    _blnAdmin = 1;
    if (_blnAdmin == 1)
    {
      dialogHandle_1.SetOutput(Translate("Do you want to skip the cleaning calculations?"));
      _rtnSkipClean = dialogHandle_1.ShowOutput(Translate("Skip Cleaning?"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
      if (_rtnSkipClean == 6)
      {
        MECC::TraceComment(Translate("*************************************************\n        Admin has skipped calculations\n*************************************************"));
        return (0);
      }
    }
    MECC::TraceComment(Translate("*************************************************\n     Identifying date of last recorded clean\n*************************************************"));
    FINDDBPATH::GetFilePaths(_arrConfigFiles);
    _strMethodsFolderPath = FilGetMethodsPath();
    _strConfigFolderPath = FilGetConfigPath();
    _strCellCalcFilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCalc.csv"));
    _strCellCalc2FilePath = StrConcat2(_strConfigFolderPath, Translate("\\CellCalc2.csv"));
    _strMethodPath = GetMethodFileName();
    _intBackslashPosition = StrReverseFind(_strMethodPath, Translate("\\"));
    _strMethodName = StrMid(_strMethodPath, _intBackslashPosition, 200);
    StrReplace(_strMethodPath, _strMethodName, Translate(""));
    _strBatFilePath = StrConcat2(_strMethodPath, Translate("\\CSVreader.bat"));
    _strPyFilePath = StrConcat2(_strMethodPath, Translate("\\CSVreader.py"));
    _strSQLStatement = StrConcat8(Translate("SELECT * FROM"), Translate(" [HamiltonCleaning] "), Translate("ORDER BY"), Translate(" [CleaningDate] "), Translate("DESC"), Translate(""), Translate(""), Translate(""));
    _rtnValue = HSLExtensions::File::Exists(_strBatFilePath);
    if (_rtnValue != 1)
    {
      MECC::TraceComment(Translate("Unable to find CSVreader.bat"));
      abort;
    }
    _rtnValue = HSLExtensions::File::Exists(_strPyFilePath);
    if (_rtnValue != 1)
    {
      MECC::TraceComment(Translate("Unable to find CSVreader.py"));
      abort;
    }
    _hndAccessDB.AddField("SwipeCard", _hndAccessDB_User, hslString, 255);
    _hndAccessDB.AddField("CleaningDate", _strDate, hslString, 8);
    if( 0 == _hndAccessDB.Open(_strAccessDBFilePath + " " + "HamiltonCleaning", hslRead, _strSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAccessDBFilePath, "HxMetEdCompCmd");
    }
    if( 0 == _hndAccessDB.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != _hndAccessDB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndAccessDB.RemoveFields();
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- _strDate = "), _strDate);
    _strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y "));
    _strCurrentTime = TimGetFormattedTime(Translate("%H:%M:%S"));
    _strCurrentDate = StrConcat2(_strCurrentDate, _strCurrentTime);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- _strCurrentDate = "), _strCurrentDate);
    _hndCellCalc.SetExtendedProperties( "HDR=NO");
    _hndCellCalc.AddField("CurrentDate", _strCurrentDate, hslString, 255);
    _hndCellCalc.AddField("Date", _strDate, hslString, 255);
    _hndCellCalc.SetDelimiter(hslCSVDelimited);
    if( 0 == _hndCellCalc.Open(_strCellCalcFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strCellCalcFilePath, "HxMetEdCompCmd");
    }
    if( 0 == _hndCellCalc.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != _hndCellCalc.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndCellCalc.RemoveFields();
    {
      if( 0 == Shell(_strBatFilePath, hslShow, hslSynchronous) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if( 0 == _tmr.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      _loopCounter1 = 0;
      while (1 == 1)
      {
        _loopCounter1 = _loopCounter1 + 1;
        _rtnValue = HSLExtensions::File::Exists(_strCellCalc2FilePath);
        if (_rtnValue == 1)
        {
          break;
        }
        _intTimeWaiting = _tmr.GetElapsedTime();
        if (_intTimeWaiting >= 20)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- _fltDaysSinceLastClean= "), _fltDaysSinceLastClean);
          return (100);
        }
      }
    }
    _hndCellCalc2.AddField("DateDiff", _fltDaysSinceLastClean, hslFloat);
    _hndCellCalc2.SetDelimiter(hslCSVDelimited);
    if( 0 == _hndCellCalc2.Open(_strCellCalc2FilePath, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strCellCalc2FilePath, "HxMetEdCompCmd");
    }
    if( 0 == _hndCellCalc2.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != _hndCellCalc2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndCellCalc2.RemoveFields();
    _fltDaysSinceLastClean = MthRound(_fltDaysSinceLastClean, 2);
    StatusDisplay_Update(Translate("Days since last Clean: "), _fltDaysSinceLastClean, 0);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("----- _fltDaysSinceLastClean= "), _fltDaysSinceLastClean);
    HSLExtensions::File::Delete(_strCellCalcFilePath);
    HSLExtensions::File::Delete(_strCellCalc2FilePath);
    return (_fltDaysSinceLastClean);
  }

  function StatusDisplay_Init( variable _blnTraceMethodName ) void {
    private variable _strMethodName;
    private variable _rtnAswStatusValue;
    private variable _rtnSuccess;
    _strMethodName = GetMethodName(_blnTraceMethodName);
    _rtnAswStatusValue = AswStatusDialog::Initialize(_strMethodName);
    if (_rtnAswStatusValue == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("ASWStatusDialog: "), Translate("Failed to Init"));
      abort;
    }
    _rtnSuccess = StatusDisplay_Update(Translate("====== Method Launched ======"), Translate(""), 0);
    if (_rtnSuccess == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("ASWStatusDialog: "), Translate("Failed to update"));
      abort;
    }
    else
    {
    }
  }

  function StatusDisplay_Update( variable _strMessage1, variable _strMessage2, variable _blnTrace ) variable {
    private variable _strTime;
    private variable _rtnAswStatusValue;
    private variable _strMessage;
    _strTime = TimGetFormattedTime(Translate("%H:%M"));
    _strTime = StrConcat4(Translate("("), _strTime, Translate(")"), Translate(""));
    _strMessage = StrConcat4(_strTime, Translate("\t"), _strMessage1, _strMessage2);
    if (_blnTrace == 1)
    {
      Trace("** [Asw] StatusUpdate:  ", _strMessage);
    }
    _rtnAswStatusValue = AswStatusDialog::AppendText(_strMessage);
    if (_rtnAswStatusValue == 0)
    {
      return (0);
    }
    else
    {
      return (1);
    }
  }

  function DoorLock( device & ML_STAR, variable _blnSim, variable _blnLock ) void {
    private dialog dialogHandle_2;
    private variable _loopCounter1;
    if (_blnSim == 0)
    {
      if (_blnLock == 1)
      {
        {
          _loopCounter1 = 0;
          while (1 == 1)
          {
            _loopCounter1 = _loopCounter1 + 1;
            onerror goto errLabel_3 ;
            err.Clear();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            break;
            errLabel_3 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              dialogHandle_2.SetOutput(Translate("The next step cannot be performed as the Hamilton cover is open. \n"), Translate("Please close the cover and hit 'OK' to continue."));
              dialogHandle_2.ShowOutput(Translate("Error: Cover Open"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }   /* end if from skip handler if no error */
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Hamilton covers: "), Translate("Locked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Locked"), 0);
      }
      else
      {
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Hamilton covers: "), Translate("Unlocked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Unlocked"), 0);
      }
    }
    else
    {
      if (_blnLock == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Sim - Hamilton covers: "), Translate("Locked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Locked"), 0);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("##### Sim - Hamilton covers: "), Translate("Unlocked"));
        StatusDisplay_Update(Translate("Hamilton Covers: "), Translate("Unlocked"), 0);
      }
    }
  }

  function TipPickup( device & ML_STAR, variable _strChannelPattern, sequence & _seqTip, variable _strTipCounter, variable _blnTesting ) void {
    private variable _intTipCounterValue;
    private variable _hndTipCounter_Value;
    private variable _rtnLookup;
    private variable _loopCounter1;
    private variable _hndTipCounter_TipCounter;
    private file _hndTipCounter;
    private variable _arrTipCounterName[];
    private variable _arrTipCounterValue[];
    private variable _blnTipType;
    private variable _strSQLStatement;
    private variable _intTipsUsed;
    private variable _intTipEndPosition;
    private variable _intMaxTipNumber;
    private variable _intLoopCount;
    private variable _arrChannelPatternString[];
    private variable _strLabwareID;
    private variable _arrConfigFiles[];
    private variable _intNewTipPos;
    private variable _rtnValue;
    private variable _intMaxTipCount;
    _intTipsUsed = 0;
    _arrChannelPatternString.SetSize(0);
    _arrChannelPatternString = HSLExtensions::String::ConvertToCharArray(_strChannelPattern);
    _intLoopCount=_arrChannelPatternString.GetSize();
    {
      for(_loopCounter1 = 0; _loopCounter1 < _intLoopCount;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        if (_arrChannelPatternString.ElementAt( _loopCounter1 -1) == "1")
        {
          _intTipsUsed = _intTipsUsed + 1;
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- [SanGen] Channels used: "), _intTipsUsed);
    _blnTipType = 0;
    _strLabwareID = SeqGetLabwareId(_seqTip);
    _rtnValue = DevGetLabwareData(ML_STAR, _strLabwareID, Translate("MlStarTipRack"));
    if (_rtnValue == "")
    {
      _rtnValue = DevGetLabwareData(ML_STAR, _strLabwareID, Translate("MlStarXLTipRack"));
      _blnTipType = 1;
      if (_rtnValue == "")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Unknown tip type"), Translate(""));
        abort;
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- [SanGen] Tip Type: "), _rtnValue);
    {
      while (1 == 1)
      {
        _arrTipCounterName.SetSize(0);
        _arrTipCounterValue.SetSize(0);
        FINDDBPATH::GetFilePaths(_arrConfigFiles);
        _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
        _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
        if( 0 == _hndTipCounter.Open(_arrConfigFiles.ElementAt( 1 -1) + " " + "TipCounter", hslRead) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _arrConfigFiles.ElementAt( 1 -1), "HxMetEdCompCmd");
        }
        {
          _loopCounter1 = 0;
          while (
             (_hndTipCounter.Eof() == 0)
          )
          {
            _loopCounter1 = _loopCounter1 + 1;
            if( 0 == _hndTipCounter.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            _arrTipCounterName.AddAsLast(_hndTipCounter_TipCounter);
            _arrTipCounterValue.AddAsLast(_hndTipCounter_Value);
          }
        }
        if( 0 != _hndTipCounter.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _hndTipCounter.RemoveFields();
        _rtnLookup = LOOKUP::Lookup(_arrTipCounterName, _strTipCounter);
        if (_rtnLookup != 0)
        {
          _intTipCounterValue=_arrTipCounterValue.GetAt(_rtnLookup-1);
          if (_intTipCounterValue == 0)
          {
            _intTipCounterValue = 1;
          }
        }
        else
        {
          _intTipCounterValue = 1;
          _hndTipCounter.AddField("TipCounter", _strTipCounter, hslString, 255);
          _hndTipCounter.AddField("Value", _intTipCounterValue, hslInteger);
          if( 0 == _hndTipCounter.Open(_arrConfigFiles.ElementAt( 1 -1) + " " + "TipCounter", hslAppend) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _arrConfigFiles.ElementAt( 1 -1), "HxMetEdCompCmd");
          }
          if( 0 == _hndTipCounter.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != _hndTipCounter.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          _hndTipCounter.RemoveFields();
        }
        _seqTip.SetCurrentPosition(_intTipCounterValue);
        _intMaxTipNumber = _seqTip.GetCount();
        TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- [SanGen] Tip Pos: "), _intTipCounterValue, Translate("/"), _intMaxTipNumber);
        _intTipEndPosition = _intTipCounterValue + _intTipsUsed;
        _intTipEndPosition = _intTipEndPosition - 1;
        if (_intTipEndPosition > _intMaxTipNumber)
        {
          ReloadTips(ML_STAR, _strTipCounter, _blnTesting);
        }
        else
        {
          break;
        }
      }
    }
    _intMaxTipCount = _seqTip.GetCount();
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- [SanGen] Tip Position: "), _intTipCounterValue, Translate("/"), _intMaxTipCount);
    if (_blnTipType == 0)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    }
    else
    {
      ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
    }
    _intNewTipPos = _seqTip.GetCurrentPosition();
    FINDDBPATH::GetFilePaths(_arrConfigFiles);
    _strSQLStatement = StrConcat8(Translate("UPDATE [TipCounter] SET [Value] = "), _intNewTipPos, Translate(" WHERE [TipCounter] = '"), _strTipCounter, Translate("'"), Translate(""), Translate(""), Translate(""));
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_arrConfigFiles.ElementAt( 1 -1) + " " + "TipCounter", hslAppend, _strSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _arrConfigFiles.ElementAt( 1 -1), "HxMetEdCompCmd");
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
  }

  function ReloadTips( device & ML_STAR, variable _strTipCounter, variable _blnUserPrompt ) void {
    private variable _strSQLStatement;
    private variable _hndTipCounter_Value;
    private variable _hndTipCounter_TipCounter;
    private file _hndTipCounter;
    private variable _arrConfigFiles[];
    FINDDBPATH::GetFilePaths(_arrConfigFiles);
    _strSQLStatement = StrConcat8(Translate("UPDATE [TipCounter] SET [Value] = "), 1, Translate(" WHERE [TipCounter] = '"), _strTipCounter, Translate("'"), Translate(""), Translate(""), Translate(""));
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_arrConfigFiles.ElementAt( 1 -1) + " " + "TipCounter", hslAppend, _strSQLStatement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _arrConfigFiles.ElementAt( 1 -1), "HxMetEdCompCmd");
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
  }

  function VolumePlausibilityCheck( variable _intVolumeToTransfer, variable _strLC ) void {
    private variable _intTipType;
    private variable _intVolumeMin;
    private variable _intVolumeMax;
    if(0){
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> _strLC = "), _strLC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> _intVolumeToTransfer = "), _intVolumeToTransfer);
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_strLC);
    _intTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    if (_intTipType == 5)
    {
      _intVolumeMax = 1000;
      _intVolumeMin = 15;
    }
    if (_intTipType == 29)
    {
      _intVolumeMax = 4000;
      _intVolumeMin = 100;
    }
    if (_intVolumeToTransfer <= _intVolumeMax)
    {
      if (_intVolumeToTransfer >= _intVolumeMin)
      {
      }
      else
      {
        MECC::TraceComment(Translate("Volume too low"));
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("Volume too great"));
      abort;
    }
  }

  private function _FourWellHandling( sequence & _seq, variable _strCP, variable _intWellCount ) variable {
    private variable _strLabwareID;
    private variable _intFour;
    private variable _intSeqIncrement;
    private variable _loopCounter1;
    private variable _intArraySize;
    private variable _intCount;
    private variable _arrCP[];
    _strLabwareID = SeqGetLabwareId(_seq);
    _strLabwareID = StrMakeLower(_strLabwareID);
    _intFour = StrFind(_strLabwareID, Translate("four"));
    if (_intFour < 0)
    {
      return (Translate(""));
    }
    _arrCP.SetSize(0);
    _arrCP = HSLExtensions::String::ConvertToCharArray(_strCP);
    _intArraySize=_arrCP.GetSize();
    _intCount = 0;
    {
      for(_loopCounter1 = 0; _loopCounter1 < _intArraySize;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        if (_arrCP.ElementAt( _loopCounter1 -1) == "1")
        {
          _intCount = _intCount + 1;
        }
      }
    }
    _intSeqIncrement = _intWellCount - _intCount;
    SeqIncrement(_seq, _intSeqIncrement);
  }

  function WorklistEntryValidation( variable varEntry, variable blnRemoveSpaces ) variable {
    private variable strVarEntry_Type;
    private variable blnError;
    private variable strReturn;
    blnError = Translate("False");
    strVarEntry_Type = StrGetType(varEntry);
    if (strVarEntry_Type == "")
    {
      blnError = Translate("True");
    }
    if (strVarEntry_Type == "s")
    {
      if (varEntry == "")
      {
        blnError = Translate("True");
      }
    }
    if (blnError != "False")
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SanGen] Variable Check Failed: "), Translate("varEntry = "), varEntry, Translate(""));
      return (Translate("error"));
    }
    if (blnRemoveSpaces == 1)
    {
      strReturn = StrMakeLowerCopy(varEntry);
      StrReplace(strReturn, Translate(" "), Translate(""));
      return (strReturn);
    }
    else
    {
      return (varEntry);
    }
  }

  function DeleteSchema( variable _strFolderPath ) void {
    private variable _strSchemaFilePath;
    private variable _blnSchema;
    _strSchemaFilePath = StrConcat2(_strFolderPath, Translate("schema.ini"));
    _blnSchema = FileDirectoryLib::CheckIfFileExists(_strSchemaFilePath);
    if (_blnSchema == 1)
    {
      FileDirectoryLib::DeleteFile(_strSchemaFilePath);
    }
    else
    {
    }
  }

  function UpdateUsers_DateLastUsed( variable _strCurrentUserPrefix ) void {
    private variable _hndAccessDB_AdvancedUser;
    private variable _hndAccessDB_UserPrefix;
    private variable _hndAccessDB_Email;
    private variable _loopCounter1;
    private variable _hndAccessDB_DateLastUsed;
    private variable _hndAccessDB_PreferredName;
    private file _hndAccessDB;
    private variable _strCurrentDate;
    private variable _arrUsersPreferred[];
    private variable _arrUserPrefix[];
    private variable _arrUserLastDate[];
    private variable _arrUserEmail[];
    private variable _arrUserAdvanced[];
    private variable rtnValue;
    private variable _loopCounter2;
    private variable _intLoopNum;
    private variable _strAccessDBFilePath;
    private variable _arrConfigFiles[];
    if (_blnTempUser == 0)
    {
      _arrUserPrefix.SetSize(0);
      _arrUsersPreferred.SetSize(0);
      _arrUserAdvanced.SetSize(0);
      _arrUserEmail.SetSize(0);
      _arrUserLastDate.SetSize(0);
      FINDDBPATH::GetFilePaths(_arrConfigFiles);
      _hndAccessDB.AddField("UserPrefix", _hndAccessDB_UserPrefix, hslString, 255);
      _hndAccessDB.AddField("PreferredName", _hndAccessDB_PreferredName, hslString, 255);
      _hndAccessDB.AddField("AdvancedUser", _hndAccessDB_AdvancedUser, hslInteger);
      _hndAccessDB.AddField("Email", _hndAccessDB_Email, hslString, 255);
      _hndAccessDB.AddField("DateLastUsed", _hndAccessDB_DateLastUsed, hslString, 8);
      if( 0 == _hndAccessDB.Open(_strAccessDBFilePath + " " + "Users", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAccessDBFilePath, "HxMetEdCompCmd");
      }
      {
        _loopCounter1 = 0;
        while (
           (_hndAccessDB.Eof() == 0)
        )
        {
          _loopCounter1 = _loopCounter1 + 1;
          if( 0 == _hndAccessDB.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          StrMakeLower(_hndAccessDB_UserPrefix);
          _arrUserPrefix.AddAsLast(_hndAccessDB_UserPrefix);
          _arrUsersPreferred.AddAsLast(_hndAccessDB_PreferredName);
          _arrUserAdvanced.AddAsLast(_hndAccessDB_AdvancedUser);
          _arrUserEmail.AddAsLast(_hndAccessDB_Email);
          _arrUserLastDate.AddAsLast(_hndAccessDB_DateLastUsed);
        }
      }
      if( 0 != _hndAccessDB.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndAccessDB.RemoveFields();
      StrMakeLower(_strCurrentUserPrefix);
      rtnValue = LOOKUP::Lookup(_arrUserPrefix, _strCurrentUserPrefix);
      Trace("rtnValue = ", rtnValue);
      Trace("_strCurrentUserPrefix = ", _strCurrentUserPrefix);
      _strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y "));
      _arrUserLastDate.SetAt(rtnValue-1, _strCurrentDate);
      _hndAccessDB.AddField("UserPrefix", _hndAccessDB_UserPrefix, hslString, 255);
      _hndAccessDB.AddField("PreferredName", _hndAccessDB_PreferredName, hslString, 255);
      _hndAccessDB.AddField("AdvancedUser", _hndAccessDB_AdvancedUser, hslInteger);
      _hndAccessDB.AddField("Email", _hndAccessDB_Email, hslString, 255);
      _hndAccessDB.AddField("DateLastUsed", _hndAccessDB_DateLastUsed, hslString, 8);
      if( 0 == _hndAccessDB.Open(_strAccessDBFilePath + " " + "Users", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAccessDBFilePath, "HxMetEdCompCmd");
      }
      _intLoopNum=_arrUserPrefix.GetSize();
      {
        for(_loopCounter2 = 0; _loopCounter2 < _intLoopNum;)
        {
          _loopCounter2 = _loopCounter2 + 1;
          StrMakeUpper(_hndAccessDB_UserPrefix);
          _hndAccessDB_UserPrefix=_arrUserPrefix.GetAt(_loopCounter2-1);
          _hndAccessDB_PreferredName=_arrUsersPreferred.GetAt(_loopCounter2-1);
          _hndAccessDB_AdvancedUser=_arrUserAdvanced.GetAt(_loopCounter2-1);
          _hndAccessDB_Email=_arrUserEmail.GetAt(_loopCounter2-1);
          _hndAccessDB_DateLastUsed=_arrUserLastDate.GetAt(_loopCounter2-1);
          if( 0 == _hndAccessDB.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != _hndAccessDB.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndAccessDB.RemoveFields();
    }
  }

  private function _SetCleanDate( variable _strCardID ) void {
    private variable _strCurrentTime;
    private variable _strCurrentDate;
    private variable _strAccessDBFilePath;
    private file _hndAccessDB;
    private variable _arrConfigFiles[];
    FINDDBPATH::GetFilePaths(_arrConfigFiles);
    _strCurrentDate = TimGetFormattedDate(Translate("%d/%m/%Y "));
    _strCurrentTime = TimGetFormattedTime(Translate("%H:%M:%S"));
    _strCurrentDate = StrConcat2(_strCurrentDate, _strCurrentTime);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- _strCurrentDate = "), _strCurrentDate);
    _hndAccessDB.AddField("SwipeCard", _strCardID, hslString, 255);
    _hndAccessDB.AddField("CleaningDate", _strCurrentDate, hslString, 8);
    if( 0 == _hndAccessDB.Open(_strAccessDBFilePath + " " + "HamiltonCleaning", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAccessDBFilePath, "HxMetEdCompCmd");
    }
    if( 0 == _hndAccessDB.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != _hndAccessDB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndAccessDB.RemoveFields();
  }

  function GetAvailableSeqPositions( sequence & _seq ) variable {
    private variable _intCurrent;
    private variable _intEnd;
    private variable _int;
    if(0){
      TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, _seq);
    }
    _intCurrent = _seq.GetCurrentPosition();
    _intEnd = _seq.GetCount();
    _int = _intEnd - _intCurrent;
    _int = _int + 1;
    return (_int);
  }

  function StackedLabwarePos( variable _blnEffect, sequence & _seq ) void {
    private variable _hnd_Position;
    private variable _intLocation;
    private variable _hnd_AutoFlask;
    private variable _strStackType;
    private variable loopCounter1;
    private variable _strLabwareID;
    private file _hnd;
    private variable _arrConfigFiles[];
    private variable _intSeqPos;
    _strLabwareID = SeqGetLabwareId(_seq);
    StrMakeLower(_strLabwareID);
    _intLocation = StrFind(_strLabwareID, Translate("storage"));
    if (_intLocation >= 1)
    {
      _strStackType = Translate("Empty");
    }
    else
    {
      _strStackType = Translate("Filled");
    }
    FINDDBPATH::GetFilePaths(_arrConfigFiles);
    if (_blnEffect == 0)
    {
      _hnd.AddField("AutoFlask", _hnd_AutoFlask, hslString, 255);
      _hnd.AddField("Position", _hnd_Position, hslInteger);
      if( 0 == _hnd.Open(_arrConfigFiles.ElementAt( 1 -1) + " " + "AutoFlaskStack", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _arrConfigFiles.ElementAt( 1 -1), "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (_hnd.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == _hnd.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (_hnd_AutoFlask == _strStackType)
          {
            _intSeqPos = _hnd_Position;
          }
        }
      }
      _seq.SetCurrentPosition(_intSeqPos);
    }
    else
    {
      _hnd.AddField("AutoFlask", _hnd_AutoFlask, hslString, 255);
      _hnd.AddField("Position", _hnd_Position, hslInteger);
      if( 0 == _hnd.Open(_arrConfigFiles.ElementAt( 1 -1) + " " + "AutoFlaskStack", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _arrConfigFiles.ElementAt( 1 -1), "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (
           (_hnd.Eof() == 0)
        )
        {
          loopCounter1 = loopCounter1 + 1;
          if (_hnd_AutoFlask == _strStackType)
          {
            _intSeqPos = _seq.GetCurrentPosition();
            _hnd_Position = _intSeqPos;
            if( 0 == _hnd.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
      }
    }
    if( 0 != _hnd.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hnd.RemoveFields();
    return;
  }

  function GetBarcode( device & ML_STAR, sequence _seq ) variable {
    private variable _strPositionID;
    private variable _strLabwareID;
    private variable _strBC;
    _strLabwareID = SeqGetLabwareId(_seq);
    _strPositionID = SeqGetPositionId(_seq);
    DevGetBarcodeData(ML_STAR, _strLabwareID, _strPositionID, _strBC);
    return (_strBC);
  }

  function AlignLabware( device & ML_STAR, sequence & _seq ) void {
    private variable _intSeqStart;
    private variable _intSeqEnd;
    private variable _intSum;
    private variable _strLabID;
    private variable _intX;
    private variable _fltAvg;
    private variable _intNumPos;
    private variable _intOffset;
    _intSeqEnd = _seq.GetCount();
    _intSeqStart = _seq.GetCurrentPosition();
    _intSum = 0;
    {
      _intNumPos = 0;
      while (
         (_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, _seq, 1);
        _intNumPos = _intNumPos + 1;
        _strLabID = SeqGetLabwareId(_seq);
        DevGetLabwarePosition(ML_STAR, _strLabID, _intX, Translate(""), Translate(""), Translate(""));
        _intSum = _intSum + _intX;
        SeqIncrement(_seq, 1);
        if (
           (_seq.GetCurrentPosition() > 0 && _seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      _seq.SetMax(_seq.GetTotal());
      _seq.SetCurrentPosition(1);
    }
    _seq.SetCurrentPosition(_intSeqStart);
    _fltAvg = _intSum / (_intNumPos * 1.0);
    {
      _intNumPos = 0;
      while (
         (_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, _seq, 1);
        _intNumPos = _intNumPos + 1;
        _strLabID = SeqGetLabwareId(_seq);
        DevGetLabwarePosition(ML_STAR, _strLabID, _intX, Translate(""), Translate(""), Translate(""));
        _intOffset = _fltAvg - _intX;
        VIRTUALLABWARE_V2::MoveSeq(ML_STAR, _seq, _intOffset, 0, 0);
        SeqIncrement(_seq, 1);
        if (_intOffset != 0)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("[SanGen] Labware offset by: "), _intOffset, Translate("mm"), Translate(""));
        }
        if (
           (_seq.GetCurrentPosition() > 0 && _seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      _seq.SetMax(_seq.GetTotal());
      _seq.SetCurrentPosition(1);
    }
    _seq.SetCurrentPosition(_intSeqStart);
  }

  function CreateChannelPattern( variable _intChannelNumber, variable _intCurrentLoop, variable _intMaxLoop, variable _intModulus ) variable {
    private variable _;
    private variable _strChannelPattern;
    private variable _intUnusedChannels;
    _strChannelPattern = Translate("");
    if (_intCurrentLoop < _intMaxLoop)
    {
      {
        for(_ = 0; _ < _intChannelNumber;)
        {
          _ = _ + 1;
          _strChannelPattern = _strChannelPattern + Translate("1");
        }
      }
    }
    else
    {
      if (_intModulus >= 1)
      {
        _intUnusedChannels = _intChannelNumber - _intModulus;
        {
          for(_ = 0; _ < _intModulus;)
          {
            _ = _ + 1;
            _strChannelPattern = _strChannelPattern + Translate("1");
          }
        }
        {
          for(_ = 0; _ < _intUnusedChannels;)
          {
            _ = _ + 1;
            _strChannelPattern = _strChannelPattern + Translate("0");
          }
        }
      }
      else
      {
        {
          for(_ = 0; _ < _intChannelNumber;)
          {
            _ = _ + 1;
            _strChannelPattern = _strChannelPattern + Translate("1");
          }
        }
      }
    }
    _strChannelPattern = _strChannelPattern + Translate("0000");
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel pattern: "), _strChannelPattern);
    return (_strChannelPattern);
  }

  function GetNumberOfChannels( device & ML_STAR, variable _intChannelType ) variable {
    private variable _intChannelNum;
    _intChannelNum = 0;
    _intChannelNum = DevGetCfgValueWithKey(ML_STAR, _intChannelType);
    if (_intChannelNum == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> There was an issue identifying the number of channels"), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Method will abort"), Translate(""));
      abort;
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel count: "), _intChannelNum);
    return (_intChannelNum);
  }

  function TipCheck( sequence & _seqTips, variable _strTipCounter, variable _intTipsNeeded ) variable {
    private variable _intTipCounterValue;
    private variable _intMaxNumberOfTips;
    private variable _hndTipCounter_Value;
    private variable _rtnLookup;
    private variable _intNumberOfOnDeckTips;
    private variable _strAccessDBFilePath;
    private variable _loopCounter1;
    private variable _hndTipCounter_TipCounter;
    private variable _blnReturnValue;
    private file _hndTipCounter;
    private variable _arrTipCounterName[];
    private variable _arrConfigFiles[];
    private variable _arrTipCounterValue[];
    SeqResetSequenceIndexes(_seqTips);
    _intMaxNumberOfTips = _seqTips.GetCount();
    _arrTipCounterName.SetSize(0);
    _arrTipCounterValue.SetSize(0);
    FINDDBPATH::GetFilePaths(_arrConfigFiles);
    _hndTipCounter.AddField("TipCounter", _hndTipCounter_TipCounter, hslString, 255);
    _hndTipCounter.AddField("Value", _hndTipCounter_Value, hslInteger);
    if( 0 == _hndTipCounter.Open(_arrConfigFiles.ElementAt( 1 -1) + " " + "TipCounter", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _arrConfigFiles.ElementAt( 1 -1), "HxMetEdCompCmd");
    }
    {
      _loopCounter1 = 0;
      while (
         (_hndTipCounter.Eof() == 0)
      )
      {
        _loopCounter1 = _loopCounter1 + 1;
        if( 0 == _hndTipCounter.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _arrTipCounterName.AddAsLast(_hndTipCounter_TipCounter);
        _arrTipCounterValue.AddAsLast(_hndTipCounter_Value);
      }
    }
    if( 0 != _hndTipCounter.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _hndTipCounter.RemoveFields();
    _rtnLookup = LOOKUP::Lookup(_arrTipCounterName, _strTipCounter);
    if (_rtnLookup != 0)
    {
      _intTipCounterValue=_arrTipCounterValue.GetAt(_rtnLookup-1);
    }
    else
    {
      _intTipCounterValue = 1;
      _hndTipCounter.AddField("TipCounter", _strTipCounter, hslString, 255);
      _hndTipCounter.AddField("Value", _intTipCounterValue, hslInteger);
      if( 0 == _hndTipCounter.Open(_strAccessDBFilePath + " " + "TipCounter", hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strAccessDBFilePath, "HxMetEdCompCmd");
      }
      if( 0 == _hndTipCounter.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != _hndTipCounter.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _hndTipCounter.RemoveFields();
    }
    if (_intTipCounterValue == 0)
    {
      _intTipCounterValue = 1;
    }
    _seqTips.SetCurrentPosition(_intTipCounterValue);
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- [SanGen] Tip Position: "), _intTipCounterValue, Translate("/"), _intMaxNumberOfTips);
    _intNumberOfOnDeckTips = _intMaxNumberOfTips - _intTipCounterValue;
    _intNumberOfOnDeckTips = _intNumberOfOnDeckTips + 1;
    if (_intTipsNeeded > _intMaxNumberOfTips)
    {
      MECC::TraceComment(Translate("Tip requirement for this process exceeds deck capacity. Method Abort"));
      abort;
    }
    else
    {
      if (_intTipsNeeded > _intNumberOfOnDeckTips)
      {
        MECC::TraceComment(Translate("Tip requirement for this process exceeds current on-deck deck capacity. Tip reload required\n\nFix me later Chris"));
        _blnReturnValue = 1;
      }
      else
      {
        _blnReturnValue = 0;
      }
    }
    return (_blnReturnValue);
  }
} // library namespace
